---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1024
set title "Titta and TPL external presenter"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\mooshammerlm\\OneDrive - Universiteit Leiden\\Documents\\GitHub\\opensesame-sample-tasks\\titta package\\sample task"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define inline_script calibration
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Run calibration
	tracker.calibrate(win)
	win.flip()
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init True
	run calibration True
	run start_recording True
	run trial_sequence True
	run session_end True

define inline_script init
	set description Init
	set _run ""
	___prepare__
	import os
	from psychopy import visual, core
	from titta import Titta
	from titta.TalkToProLab import TalkToProLab
	
	# OpenSesame specifics
	
	# Ensure working directory is the folder of your .osexp (writable) to prevent permission errors
	os.chdir(os.path.dirname(self.experiment.experiment_path))
	
	# Access the OpenSesame-created PsychoPy window as `win`.
	
	# Screen size must be Python int (avoid np.int32 JSON serialization issues)
	screen_w, screen_h = int(win.size[0]), int(win.size[1])
	
	# Participant IDs
	# Use OpenSesames "subject_nr"
	pid = str(var.subject_nr) if hasattr(var, 'subject_nr') else "TEST"
	
	# Titta SDK (for calibration)
	et_name    = 'Tobii Pro Spark'  #specify eye tracker model here
	dummy_mode = False
	
	settings = Titta.get_defaults(et_name)
	settings.FILENAME = pid  
	
	tracker = Titta.Connect(settings)
	if dummy_mode:
	    tracker.set_dummy_mode()
	tracker.init()
	
	# Make sure calibration images are saved to a writable folder
	calib_dir = os.path.join(os.getcwd(), "calibration_images")
	os.makedirs(calib_dir, exist_ok=True)
	
	tracker.calibration_output_folder = calib_dir
	
	# TalkToProLab (External Presenter)
	project_name = None  #if "None", use the currently opened Pro Lab project
	ttl = TalkToProLab(project_name=project_name, dummy_mode=dummy_mode)
	
	# Add participant to Pro Lab using the same pid
	participant_info = ttl.add_participant(pid)
	__end__

define inline_script session_end
	set description "Executes Python code"
	___run__
	ttl = self.experiment.ttl
	rec = self.experiment.rec
	
	try:
	    # Close final pending stimulus (if any)
	    if self.experiment._tpl_prev_onset is not None and self.experiment._tpl_prev_media_id is not None:
	        t_final = [None]
	        # Draw nothing; a single-frame flip simply captures the offset.
	        win.callOnFlip(lambda: t_final.__setitem__(0, int(ttl.get_time_stamp()['timestamp'])))
	        win.flip()
	
	        ttl.send_stimulus_event(
	            rec['recording_id'],
	            self.experiment._tpl_prev_onset,
	            self.experiment._tpl_prev_media_id,
	            end_timestamp=t_final[0]
	        )
	
	        # Clear the state
	        self.experiment._tpl_prev_onset = None
	        self.experiment._tpl_prev_media_id = None
	
	    # Stop and finalize
	    ttl.stop_recording()
	    ttl.finalize_recording(rec['recording_id'])
	
	finally:
	    ttl.disconnect()
	__end__
	set _prepare ""

define inline_script start_recording
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Prepare the list of images for the loop
	im_names = ['im1.jpeg', 'im2.jpeg', 'im3.jpeg']
	
	def base_name(p):
	    return os.path.splitext(os.path.basename(p))[0]
	
	# Find existing media in TPL; map base_name -> media_id
	uploaded = ttl.list_media()['media_list']
	present  = {m['media_name']: m for m in uploaded}
	media_map = {}
	
	for im in im_names:
	    b = base_name(im)
	    if b in present:
	        media_map[b] = present[b]['media_id']
	    else:
	        info = ttl.upload_media(im, "image")
	        media_map[b] = info['media_id']
	        print(f"Uploaded {im}")
	
	#Example: add an AOI to first image
	ttl.add_aois_to_image(
	    media_map[base_name(im_names[0])],
	    aoi_name='test',
	    aoi_color='AAC333',
	    key_frame_vertices=((100,100), (100,200), (200,200), (200,100)),
	    tag_name='test_tag',
	    group_name='test_group'
	)
	
	# Start recording in TPL 
	# Keep TPL on the Record tab, must report 'ready' state:
	state = ttl.get_state()
	assert state['state'] == 'ready', state['state']
	
	rec = ttl.start_recording(
	    "image_viewing",
	    participant_info['participant_id'], 
	    screen_width=screen_w,
	    screen_height=screen_h
	)
	
	# Persist for later items
	self.experiment.tracker   = tracker
	self.experiment.ttl       = ttl
	self.experiment.rec       = rec
	self.experiment.media_map = media_map
	
	#Prepare for trial loop 
	self.experiment._tpl_prev_onset = None
	self.experiment._tpl_prev_media_id = None
	__end__

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 im_name "im1.jpeg"
	setcycle 1 im_name "im2.jpeg"
	setcycle 2 im_name "im3.jpeg"
	run trial_run

define inline_script trial_run
	set description "Executes Python code"
	___run__
	from psychopy import visual, core
	import os
	
	ttl       = self.experiment.ttl
	rec       = self.experiment.rec
	media_map = self.experiment.media_map
	
	# Name from the loop column `im_name` (file pool)
	im_name    = var.im_name
	image_path = pool[im_name]
	
	# Map to Pro Lab media_id using the base name (no extension)
	bname    = os.path.splitext(os.path.basename(image_path))[0]
	media_id = media_map[bname]
	
	# Prepare current stimulus on the existing PsychoPy window `win`
	stim = visual.ImageStim(win, image=image_path, units='norm', size=(2, 2))
	
	# Flip to show current stimulus; capture onset exactly at the flip 
	t_onset_cur = [None]
	stim.draw()
	win.callOnFlip(lambda: t_onset_cur.__setitem__(0, int(ttl.get_time_stamp()['timestamp'])))
	win.flip()
	
	# Immediately CLOSE the previous stimulus at this same flip 
	if self.experiment._tpl_prev_onset is not None and self.experiment._tpl_prev_media_id is not None:
	    ttl.send_stimulus_event(
	        rec['recording_id'],
	        self.experiment._tpl_prev_onset,
	        self.experiment._tpl_prev_media_id,
	        end_timestamp=t_onset_cur[0]
	    )
	
	# Keep current stimulus visible for the desired duration
	core.wait(6)  # or var.dur
	
	# Defer closing current stimulus to the NEXT trial's flip
	self.experiment._tpl_prev_onset = t_onset_cur[0]
	self.experiment._tpl_prev_media_id = media_id
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_loop True

